PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = iwisdm_med_pcy
  keyboardBackend = ioHub
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Routines
  Routine trial
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    KeyboardComponent continue_from_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction
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    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Press Space button to start!
        The Instruction will stay on the screen
        Read the images from left to right, from top to bottom (the usual order that meets your reading habbit)
  Routine new_trial
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        New Trial!
        Press Space to start
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine frame0_2
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    TextComponent text_4
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction
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    TextComponent text_5
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = press Space to continue
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image0_1
      image [set every repeat] = $frame1
      pos = (-0.11, 0.21)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image0_2
      image [set every repeat] = $frame2
      pos = (0.11, 0.21)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image0_3
      image [set every repeat] = $frame3
      pos = (0.32, 0.21)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image0_4
      image [set every repeat] = $frame4
      pos = (-0.32, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image0_5
      image [set every repeat] = $frame5
      pos = (-0.11, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image0_6
      image [set every repeat] = $frame6
      pos = (0.11, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image0_7
      image [set every repeat] = $frame7
      pos = (0.32, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image0
      image [set every repeat] = $frame0
      pos = (-0.32, 0.21)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine ending
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please Respond by pressing y or n!
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine new_trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_medium.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('instruction', 'observe object 1, delay, observe object 2, observe object 3, observe object 4, observe object 5, if location of object 3 not equal top right or location of object 2 equal top left , then location of object 1 equal top left , else location of object 4 not equal location of object 5 ?'), ('action', False), ('frame0', './for_xx/trial0/frames/epoch0.png'), ('frame1', './for_xx/trial0/frames/epoch1.png'), ('frame2', './for_xx/trial0/frames/epoch2.png'), ('frame3', './for_xx/trial0/frames/epoch3.png'), ('frame4', './for_xx/trial0/frames/epoch4.png'), ('frame5', './for_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,
      OrderedDict([('instruction', 'observe object 1, observe object 2, observe object 3, observe object 4, observe object 5, observe object 6, observe object 7, observe object 8, if object of object 5 not equal object of object 1 , then object of object 4 equal object of object 6 or object of object 3 equal object of object 8 , else object of object 2 not equal object of object 7 ?'), ('action', True), ('frame0', './for_xx/trial201/frames/epoch0.png'), ('frame1', './for_xx/trial201/frames/epoch1.png'), ('frame2', './for_xx/trial201/frames/epoch2.png'), ('frame3', './for_xx/trial201/frames/epoch3.pn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
    Routine trial
    Routine frame0_2
    Routine ending
  LoopTerminator trials
